<?xml version="1.0"?>
<monkeyml version="1.0">
    <io_devices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 tag="IO Devices">
        <iodevice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 tag="LabJackU6" priority="" type="LabJackU6" pulse_duration="juice" pulse_on="juice" lever_press="FIO1" alt="" lever_solenoid="FIO2"></iodevice>
    </io_devices>
    <variables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 tag="Variables">
        <folder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 tag="Behavioral Control">
            <variable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 tag="subjectNum" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable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 tag="tooFastTimeMs" scope="global" logging="when_changed" default_value="100" type="integer" persistant="1"></variable>
            <variable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 tag="doWaitForUp" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"></variable>
            <variable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 tag="doAuditoryWaitingForStim" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"></variable>
            <variable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 tag="doLeverSolenoid" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable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 tag="doHoldTone" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable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 tag="holdRepeatIntervalMs" scope="global" logging="when_changed" default_value="500" type="integer" persistant="1"></variable>
            <variable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 tag="reactTimeMs" scope="global" logging="when_changed" default_value="1250" type="integer" persistant="1"></variable>
            <variable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 tag="react1TimeMS" scope="global" logging="when_changed" default_value="250" type="integer" persistant="1"></variable>
            <variable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 tag="react1DurMS" scope="global" logging="when_changed" default_value="500" type="integer" persistant="1"></variable>
            <variable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 tag="react2TimeMS" scope="global" logging="when_changed" default_value="1000" type="integer" persistant="1"></variable>
            <variable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 tag="react2DurMS" scope="global" logging="when_changed" default_value="500" type="integer" persistant="1"></variable>
            <variable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 tag="rewardMS" scope="global" logging="when_changed" default_value="50" type="integer" persistant="1"></variable>
            <variable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 tag="reward1MS" scope="global" logging="when_changed" default_value="75" type="integer" persistant="1"></variable>
            <variable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 tag="reward2MS" scope="global" logging="when_changed" default_value="75" type="integer" persistant="1"></variable>
            <variable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 tag="randReqHoldMaxMs" scope="global" logging="when_changed" default_value="300" type="integer" persistant="1"></variable>
            <variable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 tag="fixedReqHoldTimeMs" scope="global" logging="when_changed" default_value="400" type="integer" persistant="1"></variable>
            <variable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 tag="earlyTimeoutMs" scope="global" logging="when_changed" default_value="200" type="integer" persistant="1"></variable>
            <variable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 tag="leverDownTimeMS" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="missedTimeoutMs" scope="global" logging="when_changed" default_value="2000" type="integer" persistant="1"></variable>
            <variable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 tag="itiTimeMs" scope="global" logging="when_changed" default_value="750" type="integer" persistant="1"></variable>
            <variable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 tag="postRewardMs" scope="global" logging="when_changed" default_value="500" type="integer" persistant="1"></variable>
            <variable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 tag="minRewardUs" scope="global" logging="when_changed" default_value="20000" type="integer" persistant="1"></variable>
            <variable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 tag="maxRewardUs" scope="global" logging="when_changed" default_value="20000" type="integer" persistant="1"></variable>
            <variable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 tag="interRewardIntervalMs" scope="global" logging="when_changed" default_value="200" type="integer" persistant="1"></variable>
            <variable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 tag="maxConsecCorrects" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"></variable>
            <variable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 tag="jackpotProb" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable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 tag="jackpotRewardSizeUs" scope="global" logging="when_changed" default_value="100000" type="integer" persistant="1"></variable>
        </folder>
        <folder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 tag="Stimuli">
            <variable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 tag="gratingAzimuthDeg" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable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 tag="gratingDirectionDeg" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="gratingElevationDeg" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
            <variable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 tag="gratingHeightDeg" scope="global" logging="when_changed" default_value="5" type="integer" persistant="1"></variable>
            <variable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 tag="gratingSpatialFreqCPD" scope="global" logging="when_changed" default_value="0.5" type="integer" persistant="1"></variable>
            <variable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 tag="gratingSpeedDPS" scope="global" logging="when_changed" default_value="1" type="integer" persistant="1"></variable>
            <variable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 tag="gratingWidthDeg" scope="global" logging="when_changed" default_value="10" type="integer" persistant="1"></variable>
        </folder>
        <folder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 tag="Fake Mouse">
            <variable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 tag="doLever" scope="global" logging="when_changed" default_value="1" type="boolean" persistant="1"></variable>
            <variable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 tag="fakeMouseMaxPressMs" scope="global" logging="when_changed" default_value="300" type="integer" persistant="1"></variable>
            <variable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 tag="fakeMouseMaxReactMs" scope="global" logging="when_changed" default_value="500" type="integer" persistant="1"></variable>
        </folder>
        <folder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 tag="Task Status">
            <variable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 tag="failure" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="ignore" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="leverResult" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
            <variable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 tag="stimulusOn" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
            <variable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 tag="success" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="trialStart" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
            <variable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 tag="stateTrace" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
        </folder>
        <folder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 tag="Online Display">
            <variable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 tag="sync" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        </folder>
        <folder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 tag="Hardware variables">
            <variable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 tag="FIO1" full_name="FIO1" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"></variable>
            <variable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 tag="FIO2" full_name="FIO1" default_value="0" scope="GLOBAL" type="boolean" editable="never" logging="when_changed"></variable>
            <variable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 tag="juice" full_name="juice" scope="GLOBAL" logging="when_changed" default_value="0" type="integer"></variable>
        </folder>
        <folder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 tag="Internal Variables">
            <variable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 tag="tTotalReqHoldTimeMs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="tTotalRewardTimeUs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="tRandReqHoldTimeMs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="tFakeMouseReactMs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="consecCorrects" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="tNRewards" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="tInterRewardIntervalMs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="tRewardAddPerMsHoldUs" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="tResponseTimeMS" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
            <variable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 tag="tIsJackpot" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        </folder>
    </variables>
    <sounds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 tag="Sounds">
        <sound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 tag="leverPressSound" type="wav_file" path="wavs/200msSq.wav"></sound>
        <sound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 tag="waitingForLeverSound" type="wav_file" path="wavs/trialStart-F10e-short.wav"></sound>
        <sound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 tag="correctSound" type="wav_file" path="wavs/shortCorrect.wav"></sound>
        <sound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 tag="incorrectSound" type="wav_file" path="wavs/incorrectMouse.wav"></sound>
        <sound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 tag="holdSound" type="wav_file" path="wavs/quietHold.wav"></sound>
        <sound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 tag="rewardSound" type="wav_file" path="wavs/shortCorrect.wav"></sound>
    </sounds>
    <stimuli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 tag="Stimuli">
        <stimulus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 type="rectangle" tag="testRect" color="1,1,1" x_size="50" y_size="50" x_position="0" y_position="0" rotation="0" contrast="1"></stimulus>
        <stimulus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 type="image_file" tag="imageStimulus" path="images/big-sin-grating-ori90-sf200.png" x_size="40" y_size="40" x_position="0.0" y_position="0.0" rotation="0.0" alpha_multiplier="1.0"></stimulus>
        <stimulus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 type="blank_screen" tag="brightBackground" color="0.5,0.5,0.5"></stimulus>
    </stimuli>
    <experiment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 tag="Experiment" full_name="DigitalInExample">
        <protocol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 tag="JuiceOnHoldProtocol" full_name="Protocol" interruptable="YES" selection="sequential_ascending" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
            <action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 tag="Queue Stimulus" type="queue_stimulus" stimulus="brightBackground"></action>
            <action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 tag="Update Stimulus 3" type="update_stimulus_display"></action>
            <action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 type="assignment" tag="consecCorrects = 0" variable="consecCorrects" value="0"></action>
            <task_system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 tag="Preamble" interruptible="YES">
                <task_system_state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 tag="openITC" full_name="openITC" interruptable="YES" description="" interruptible="YES">
                    <action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 type="assignment" tag="juice = 0" variable="juice" value="0"></action>
                    <transition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 type="yield" tag="Exit Task System..."></transition>
                </task_system_state>
            </task_system>
            <trial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 tag="Trial" full_name="Trial" description="" interruptible="1" selection="sequential" nsamples="1000" sampling_method="cycles">
                <task_system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 tag="TS" full_name="TS" interruptable="YES" description="" interruptible="YES"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>
                    <task_system_state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 tag="Intertrial" interruptible="YES">
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                        <action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 type="if" tag="If stateTrace Announce State" condition="stateTrace">
                            <action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 type="report" tag="Announce State" message="Intertrial State"></action>
                        </action>
                        <action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 type="assignment" tag="Set trialStart" variable="trialStart" value="1"></action>
                        <action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 type="assignment" tag="Sync Matlab" variable="sync" value="1"></action>
                        <action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 type="assignment" tag="juice = 0" variable="juice" value="0"></action>
                        <action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 type="assignment" tag="leverResult = 0" variable="leverResult" value="0"></action>
                        <action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 tag="Start IO Device" type="start_device_IO" device="LabJackU6"></action>
                        <action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 type="start_timer" tag="Start interTrialTimer" timer="interTrialTimer" timebase="" duration="itiTimeMs" duration_units="ms"></action>
                        <action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 type="assignment" tag="Clear stimulusOn" variable="stimulusOn" value="0"></action>
                        <action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 type="assignment" tag="Compute tRewardAddPerMsHoldUs" variable="tRewardAddPerMsHoldUs" value="(maxRewardUs - minRewardUs) / ( randReqHoldMaxMs )"></action>
                        <action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 type="assignment" tag="Compute tIsJackpot" variable="tIsJackpot" value="rand(0,1000) &lt; jackpotProb*1000"></action>
                        <action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 type="if" tag="if doLeverSolenoid" condition="doLeverSolenoid">
                            <action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 type="assignment" tag="lever Solenoid up" variable="FIO2" value="1"></action>
                        </action>
                        <action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 type="if" tag="if !doAuditoryWaitingForStim" condition="doAuditoryWaitingForStim != 1">
                            <action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 type="report" tag="************Error - doAuditoryWaitingForStim should always be on" message="InterTrial"></action>
                        </action>
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                        <transition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 type="timer_expired" tag="If Expired, Go To WaitForUp" target="WaitForUp" timer="interTrialTimer"></transition>
                    </task_system_state>
                    <task_system_state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 tag="WaitForUp" interruptible="YES">
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                        <action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 type="if" tag="If stateTrace Announce State 2" condition="stateTrace">
                            <action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 type="report" tag="Announce State" message="WaitForUp State"></action>
                        </action>
                        <action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 type="if" tag="if doLeverSolenoid 2" condition="doLeverSolenoid">
                            <action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 type="assignment" tag="lever Solenoid down" variable="FIO2" value="0"></action>
                        </action>
                        <action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 type="if" tag="if doAuditoryWaitingForStim" condition="doAuditoryWaitingForStim">
                            <action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 tag="Play waitingForLeverSound" type="play_sound" sound="waitingForLeverSound"></action>
                        </action>
                        <action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 type="start_timer" tag="Start Timer 2" timer="holdToneTimer" timebase="" duration="holdRepeatIntervalMs" duration_units="ms"></action>
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                        <transition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 type="conditional" tag="If LeverUp (and not fakeMouse) go to StartTrial 2" condition="FIO1 == 0 || doLever == 0 || doWaitForUp == 0" target="StartTrial"></transition>
                        <transition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 type="timer_expired" tag="If Timer Expired, Go To PlayHoldTone" target="PlayHoldTone" timer="holdToneTimer"></transition>
                    </task_system_state>
                    <task_system_state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 tag="PlayHoldTone" interruptible="YES">
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                        <action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 type="if" tag="If stateTrace Announce State 3" condition="stateTrace">
                            <action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 type="report" tag="Announce State" message="PlayHoldTone State"></action>
                        </action>
                        <action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 type="if" tag="if doHoldTone" condition="doHoldTone &amp;&amp; FIO1 == 1">
                            <action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 tag="Play holdSound" type="play_sound" sound="holdSound"></action>
                        </action>
                        <action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 type="start_timer" tag="Start Timer" timer="holdToneTimer" timebase="" duration="holdRepeatIntervalMs" duration_units="ms"></action>
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                        <transition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 type="conditional" tag="If LeverUp (and not fakeMouse) go to StartTrial" condition="FIO1 == 0 || doLever == 0 || doWaitForUp == 0" target="StartTrial"></transition>
                        <transition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 type="timer_expired" tag="If Timer Expired, Repeat this" target="PlayHoldTone" timer="holdToneTimer"></transition>
                    </task_system_state>
                    <task_system_state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 tag="StartTrial" interruptible="YES">
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                        <action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 type="if" tag="If stateTrace Announce State 4" condition="stateTrace">
                            <action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 type="report" tag="Announce State" message="StartTrial State"></action>
                        </action>
                        <action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 type="if" tag="if fakeMouse" condition="!doLever">
                            <action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 type="start_timer" tag="Start Fake Mouse Press Timer" timer="fakeMousePressTimer" timebase="" duration="rand(0, fakeMouseMaxPressMs)" duration_units="ms"></action>
                            <action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 type="report" tag="Announce Fake Mouse Active" message="Fake Mouse Active"></action>
                        </action>
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                        <transition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 type="conditional" tag="If Lever Down, Go To LeverDown" condition="FIO1 == 1" target="LeverDown"></transition>
                    </task_system_state>
                    <task_system_state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 tag="LeverDown" interruptible="YES">
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                        <action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 type="if" tag="If stateTrace Announce State 8" condition="stateTrace">
                            <action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 type="report" tag="Announce State" message="LeverDown State"></action>
                        </action>
                        <action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 type="assignment" tag="Set leverDownTime" variable="leverDownTimeMS" value="now() / 1000"></action>
                        <action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 type="assignment" tag="leverResult = 1" variable="leverResult" value="1"></action>
                        <action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 tag="Play Lever Press Sound" type="play_sound" sound="leverPressSound"></action>
                        <action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 tag="Queue Stimulus" type="queue_stimulus" stimulus="imageStimulus"></action>
                        <action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 tag="Update Stimulus" type="update_stimulus_display"></action>
                        <action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 type="assignment" tag="Set StimulusOn" variable="stimulusOn" value="1"></action>
                        <action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 type="if" tag="if fakeMouse" condition="!doLever">
                            <action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 type="assignment" tag="Assign tFakeMouseReactMs" variable="tFakeMouseReactMs" value="rand(0, fakeMouseMaxReactMs)"></action>
                            <action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 type="start_timer" tag="Start Fake Mouse Timer" timer="fakeMouseTimer" timebase="" duration="tFakeMouseReactMs" duration_units="ms"></action>
                            <action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 tag="Report FakeMouseTimer" full_name="Report Press" type="report" message="fake mouse to react in $tFakeMouseReactMs ms"></action>
                        </action>
                        <action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 type="start_timer" tag="Start Too Fast Timer" timer="tooFastTimer" timebase="" duration="tooFastTimeMs" duration_units="ms"></action>
                        <action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 type="start_timer" tag="Start React Timer" timer="reactTimeTimer" timebase="" duration="reactTimeMs" duration_units="ms"></action>
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                        <transition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 type="conditional" tag="If Lever Up, Go To TooFast" condition="FIO1 == 0 &amp;&amp; doLever == 1" target="TooFast"></transition>
                        <transition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 type="timer_expired" tag="if tooFastTimer expired, go to WaitRelease" target="WaitRelease" timer="tooFastTimer"></transition>
                    </task_system_state>
                    <task_system_state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 tag="WaitRelease" interruptible="YES">
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                        <action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 type="assignment" tag="tTotalReqHoldTime for Matlab (>?????)ß" variable="tTotalReqHoldTimeMs" value="1500"></action>
                        <action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 type="if" tag="If stateTrace Announce State" condition="stateTrace">
                            <action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 type="report" tag="Announce WaitRelease" message="WaitRelease State"></action>
                        </action>
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                        <transition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 type="timer_expired" tag="If Reaction Time up, Go To Failed" target="Failed" timer="reactTimeTimer"></transition>
                        <transition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 type="conditional" tag="If Lever Up, Go To LeverReleased" condition="FIO1 == 0 &amp;&amp; doLever == 1" target="LeverReleased"></transition>
                    </task_system_state>
                    <task_system_state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 tag="LeverReleased" interruptible="YES">
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                        <action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 type="if" tag="If stateTrace Announce LeverReleased" condition="stateTrace">
                            <action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 type="report" tag="Announce LeverReleased" message="LeverReleased State"></action>
                        </action>
                        <action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 type="assignment" tag="Set leverResult to 2" variable="leverResult" value="2"></action>
                        <action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 type="assignment" tag="Get Response Time" variable="tResponseTimeMS" value="now() / 1000"></action>
                        <action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 type="assignment" tag="Init Total Reward to Default" variable="tTotalRewardTimeUs" value="rewardMS * 1000"></action>
                        <action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 type="if" tag="If In Interval 1" condition="(tResponseTimeMS > leverDownTimeMS + react1TimeMS) &amp;&amp; (tResponseTimeMS &lt;= leverDownTimeMS + react1TimeMS + react1DurMS)">
                            <action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 type="assignment" tag="Set Reward to Interval 1 Reward" variable="tTotalRewardTimeUs" value="reward1MS * 1000"></action>
                            <action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 type="report" tag="Report Interval 1" message="Interval 1"></action>
                        </action>
                        <action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 type="if" tag="If In Interval 2" condition="(tResponseTimeMS > leverDownTimeMS + react2TimeMS) &amp;&amp; (tResponseTimeMS &lt;= leverDownTimeMS + react2TimeMS + react2DurMS)">
                            <action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 type="assignment" tag="Set Reward to Interval 2 Reward" variable="tTotalRewardTimeUs" value="reward2MS * 1000"></action>
                            <action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 type="report" tag="Report Interval" message="Interval 2"></action>
                        </action>
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                        <transition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 type="direct" tag="Go To Correct" target="Correct"></transition>
                    </task_system_state>
                    <task_system_state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 tag="Correct" interruptible="YES">
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                        <action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 type="if" tag="If stateTrace Announce State 11" condition="stateTrace">
                            <action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 type="report" tag="Announce State" message="Correct State"></action>
                        </action>
                        <action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 type="assignment" tag="leverResult = 0" variable="leverResult" value="0"></action>
                        <action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 type="assignment" tag="success++" variable="success" value="success+1"></action>
                        <action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 type="assignment" tag="consecCorrects++" variable="consecCorrects" value="consecCorrects + 1"></action>
                        <action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 type="assignment" tag="Start reward" variable="juice" value="tTotalRewardTimeUs"></action>
                        <action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 type="report" tag="Report Juice" message="juice = $juice"></action>
                        <action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 tag="Play reward sound" type="play_sound" sound="rewardSound"></action>
                        <action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 tag="Dequeue Stimulus 2" type="dequeue_stimulus" stimulus="imageStimulus"></action>
                        <action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 tag="Update Stimulus 5" type="update_stimulus_display"></action>
                        <action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 type="start_timer" tag="Start Post Reward Pause Timer" timer="postRewardPause" timebase="" duration="tTotalRewardTimeUs / 1000 + postRewardMs" duration_units="ms"></action>
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                        <transition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 type="timer_expired" tag="If Timer Expired Go To EndTrial" target="EndTrial" timer="postRewardPause"></transition>
                    </task_system_state>
                    <task_system_state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 tag="TooFast" interruptible="YES">
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                        <action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 type="if" tag="If stateTrace Announce State" condition="stateTrace">
                            <action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 type="report" tag="Announce TooFast" message="Too Fast"></action>
                        </action>
                        <action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 type="assignment" tag="leverResult = 0" variable="leverResult" value="0"></action>
                        <action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 type="assignment" tag="failure++" variable="failure" value="failure+1"></action>
                        <action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 type="assignment" tag="consecCorrects = 0" variable="consecCorrects" value="0"></action>
                        <action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 tag="Play incorrectSound" type="play_sound" sound="incorrectSound"></action>
                        <action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 type="if" tag="if doLeverSolenoid 3" condition="doLeverSolenoid">
                            <action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 type="assignment" tag="lever Solenoid up" variable="FIO2" value="1"></action>
                        </action>
                        <action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 tag="Dequeue Stimulus 0" type="dequeue_stimulus" stimulus="imageStimulus"></action>
                        <action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 tag="Update Stimulus 2" type="update_stimulus_display"></action>
                        <action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 type="start_timer" tag="Start earlyTimeoutTimer" timer="earlyTimeoutTimer" timebase="" duration="earlyTimeoutMs" duration_units="ms"></action>
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                        <transition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 type="timer_expired" tag="If earlyTimeoutTimer expired go to EndTrial" target="EndTrial" timer="earlyTimeoutTimer"></transition>
                    </task_system_state>
                    <task_system_state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 tag="Failed" interruptible="YES">
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                        <action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 type="assignment" tag="leverResult = 0" variable="leverResult" value="0"></action>
                        <action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 type="assignment" tag="ignore++" variable="ignore" value="ignore + 1"></action>
                        <action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 type="assignment" tag="consecCorrects = 0" variable="consecCorrects" value="0"></action>
                        <action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 tag="Report 4" full_name="ReportDigital" type="report" message="Failed"></action>
                        <action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 tag="Play incorrectSound 2" type="play_sound" sound="incorrectSound"></action>
                        <action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 type="start_timer" tag="start timer" timer="missedTimeoutTimer" timebase="" duration="missedTimeoutMs" duration_units="ms"></action>
                        <action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 type="if" tag="if doLeverSolenoid 4" condition="doLeverSolenoid">
                            <action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 type="assignment" tag="lever Solenoid up" variable="FIO2" value="1"></action>
                        </action>
                        <action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 tag="Dequeue Stimulus 1" type="dequeue_stimulus" stimulus="imageStimulus"></action>
                        <action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 tag="Update Stimulus 4" type="update_stimulus_display"></action>
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                        <transition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 type="timer_expired" tag="go to EndTrial" target="EndTrial" timer="missedTimeoutTimer"></transition>
                    </task_system_state>
                    <task_system_state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 tag="EndTrial" interruptible="YES">
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                        <action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 type="if" tag="If stateTrace Announce State 12" condition="stateTrace">
                            <action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 type="report" tag="Announce State" message="EndTrial State"></action>
                        </action>
                        <action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 tag="Stop IO Device" type="stop_device_IO" device="LabJackU6"></action>
                        <action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 tag="Dequeue Stimulus 0" type="dequeue_stimulus" stimulus="imageStimulus"></action>
                        <action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 tag="Update Stimulus 2" type="update_stimulus_display"></action>
                        <action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 type="assignment" tag="End Matlab Sync" variable="sync" value="0"></action>
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                        <transition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 type="direct" tag="Go To Intertrial" target="Intertrial"></transition>
                    </task_system_state>
                </task_system>
            </trial>
        </protocol>
    </experiment>
</monkeyml>